PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = f'%s_data/%s_%s/%s_%s' % (expName, expInfo['Nombre'], expInfo['date'], expInfo['Nombre'], expInfo['date'])
  Experiment info = {'Nombre': '', 'Edad': '', 'Lateralidad': "['Izquierda', 'Derecha']"}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = diatipico
  keyboardBackend = ioHub
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Routines
  Routine Instrucciones
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    TextComponent texto_instrucciones
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A continuación, te pedimos que nos cuentes un día típico. Espera a que aparezca el microfono para empezar a hablar.

        Pulse ESPACIO para empezar a grabar y ESPACIO nuevamente cuando termines.
    KeyboardComponent start_rec
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Respuesta
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    ImageComponent image
      image = microphone-png-16.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import sounddevice as sd
        import soundfile as sf
        import threading
        import time
        from psychopy import core, event
        #from pyfirmata import Arduino
        from queue import Queue
        from time import sleep
        import serial

        # Connecting to the board
        puerto_arduino='COM16'
        baud_rate=115200

        # Variable para rastrear si estamos grabando
        recording = False
        sample_rate = 44100  # Sample rate (adjust as needed)


        class Grabadora:
            def __init__(self, filepath, mic_id, sample_rate, channels, arduino_port, baud_rate):
                self.filepath = filepath
                self.mic_id = mic_id
                self.SAMPLE_RATE = sample_rate
                self.CHANNELS = channels
                self.mic_queue = Queue()
                self.recording = False
                self.stop_requested = False  # Variable de bandera para detener la grabación

                # Conectar a la placa Arduino
                # Configura la comunicación serie
                self._serial = serial.Serial(arduino_port, baud_rate)  # Reemplaza 'COM3' por el puerto serie correcto


            def callback(self, indata, frames, time, status):
                if status:
                    print(status, file=sys.stderr)
                if self.recording:
                    self.mic_queue.put(indata.copy())

            def start_recording(self):
                if not self.recording:
                    self.recording = True
                    self.enviarMarca()  # Llama a enviarMarca al inicio de la grabación
                    self.mic_queue = Queue()  # Reinicia la cola
                    self.recording_thread = threading.Thread(target=self._record)
                    self.recording_thread.start()

            def stop_recording(self):
                if self.recording:
                    self.stop_requested = True  # Establece la bandera de detención
                    self.enviarMarca()


            def enviarMarca(self):
                # Mensaje a enviar a Arduino
                mensaje = "P"
                # Envía el mensaje a Arduino
                self._serial.write(mensaje.encode())


            def _record(self):
                with sf.SoundFile(self.filepath, mode='x', samplerate=self.SAMPLE_RATE, channels=self.CHANNELS, subtype=None) as file:
                    with sd.InputStream(samplerate=self.SAMPLE_RATE, device=self.mic_id, channels=self.CHANNELS, callback=self.callback):
                        try:
                            while not self.stop_requested:  # Verifica si se solicitó la detención
                                file.write(self.mic_queue.get())

                        except RuntimeError as re:
                            print(f"{re}. If recording was stopped by the user, then this can be ignored")
                        finally:
                            self.recording = False  # Asegura que la grabación se marque como detenida
      Begin Experiment:
        output_filename = f'%s_data/%s_%s/%s_%s.wav' % (expName, expInfo['Nombre'],
            expInfo['date'], expInfo['Nombre'], expInfo['date'])  # Output file name

        # Crear una instancia de la grabadora con los parámetros adecuados
        mi_grabadora = Grabadora(filepath=output_filename, mic_id=0,
            sample_rate=sample_rate, channels=1, arduino_port=puerto_arduino, baud_rate=baud_rate)
      Begin Routine:
        # Iniciar la grabación
        mi_grabadora.start_recording()
      End Experiment:
        # Cierra la conexión serie
        mi_grabadora._serial.close()
        try:
            # Detener la grabación
            mi_grabadora.stop_recording()
            print("Grabación detenida.")
        except:
            pass
      End Routine:
        mi_grabadora.stop_recording()
    KeyboardComponent stop_rec
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.0
      syncScreenRefresh = False
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  Routine Agradecimiento
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Presion ESPACIO para terminar el experimento
    KeyboardComponent exit_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Instrucciones
  Routine Respuesta
  Routine Agradecimiento
