PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = f'data/%s_%s/%s_%s' % (expInfo['Nombre'], expInfo['date'], expInfo['Nombre'], expInfo['date'])
  Experiment info = {'Nombre': '', 'Edad': '', 'Lateralidad': "['Izquierda', 'Derecha']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  colPriority = {'': ''}
  expName = diatipico
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A continuación, te pedimos que nos cuentes un día típico. Espera a que aparezca el microfono para empezar a hablar.

        Pulse ESPACIO para empezar a grabar y ESPACIO nuevamente cuando termines.
    KeyboardComponent start_rec
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Recording
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    ImageComponent image
      image = resources/microphone-png-16.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import sounddevice as sd
        import soundfile as sf
        import threading
        from psychopy import core, event
        from queue import Queue
        import serial
        import sys

        # Configure connection to the board
        port = 'COM16'
        baud_rate = 115200

        # Recording Flag and Fs
        recording = False
        sample_rate = 44100

        class AudioRecorder:
            def __init__(self, filepath, mic_id, sample_rate, channels, arduino_port, baud_rate):
                # Output audio file
                self.filepath = filepath
                # Microphone ID
                self.mic_id = mic_id
                # Sample rate
                self.sample_rate = sample_rate
                # Number of channels
                self.channels = channels
                # Audio queue
                self.mic_queue = Queue()
                # Recording flag
                self.recording = False
                # Stop request flag
                self.stop_requested = False

                # Connection to the Arduino board via serial communication
                self._serial = serial.Serial(arduino_port, baud_rate)

            def callback(self, indata, frames, time, status):
                if status:
                    print(status, file=sys.stderr)
                if self.recording:
                    self.mic_queue.put(indata.copy())

            def start_recording(self):
                if not self.recording:
                    self.recording = True
                    self._send_pulse_to_arduino()
                    self.mic_queue = Queue()  # Reset the audio queue
                    self.recording_thread = threading.Thread(target=self._record_audio)
                    self.recording_thread.start()

            def stop_recording(self):
                if self.recording:
                    self.stop_requested = True
                    self._send_pulse_to_arduino()

            def _send_pulse_to_arduino(self):
                # Message to send to Arduino
                message = "P"
                # Send the message to Arduino
                self._serial.write(message.encode())

            def _record_audio(self):
                with sf.SoundFile(self.filepath, mode='x', samplerate=self.sample_rate, channels=self.channels, subtype=None) as file:
                    with sd.InputStream(samplerate=self.sample_rate, device=self.mic_id, channels=self.channels, callback=self.callback):
                        try:
                            while not self.stop_requested:
                                file.write(self.mic_queue.get())
                        except RuntimeError as re:
                            print(f"{re}. If recording was stopped by the user, then this can be ignored")
                        finally:
                            self.recording = False
      Begin Experiment:
        output_filename = f'data/%s_%s/%s_%s.wav' % (expInfo['Nombre'],
            expInfo['date'], expInfo['Nombre'], expInfo['date'])  # Output file name

        # Instance AudioRecorder
        recorder = AudioRecorder(filepath=output_filename, mic_id=0,
            sample_rate=sample_rate, channels=1, arduino_port=port, baud_rate=baud_rate)
      Begin Routine:
        # Start Recording
        recorder.start_recording()
      End Experiment:
        # Closes serial connection
        recorder._serial.close()

        try:
            # Stop recording if it didn't stop before
            recorder.stop_recording()
        except:
            pass
      End Routine:
        # Stop recording
        recorder.stop_recording()
    KeyboardComponent stop_rec
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      syncScreenRefresh = False
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  Routine Aknowledgment
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Presion ESPACIO para terminar el experimento
    KeyboardComponent exit_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Instructions
  Routine Recording
  Routine Aknowledgment
