PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = f'data/%s_%s/%s_%s' % (expInfo['Nombre'], expInfo['date'], expInfo['Nombre'], expInfo['date'])
  Experiment info = {'Nombre': '', 'Edad': '', 'Lateralidad': "['Izquierda', 'Derecha']"}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  colPriority = {'': ''}
  expName = diatipico
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Next, we ask you to tell us about a typical day. Wait for the microphone to appear before you start speaking.

        Press SPACE to start recording, and press SPACE again when you're finished.
    KeyboardComponent start_rec
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Recording
    RoutineSettingsComponent Recording
      saveStartStop = False
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    ImageComponent image
      image = resources/microphone-png-16.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import sounddevice as sd
        import soundfile as sf
        import threading
        from psychopy import core, event
        from queue import Queue
        import serial
        import sys
        from audioRecorder import AudioRecorder

        # Configure connection to the board
        port = 'COM16'
        baud_rate = 115200

        # Recording Flag and Fs
        recording = False
        sample_rate = 44100
      Begin Experiment:
        output_filename = f'data/%s_%s/%s_%s.wav' % (expInfo['Nombre'],
            expInfo['date'], expInfo['Nombre'], expInfo['date'])  # Output file name

        # Instance AudioRecorder
        recorder = AudioRecorder(filepath=output_filename, mic_id=0,
            sample_rate=sample_rate, channels=1, arduino_port=port, baud_rate=baud_rate)
      Begin Routine:
        # Start Recording
        recorder.start_recording()
      End Experiment:
        # Closes serial connection
        recorder._serial.close()

        try:
            # Stop recording if it didn't stop before
            recorder.stop_recording()
        except:
            pass
      End Routine:
        # Stop recording
        recorder.stop_recording()
    KeyboardComponent stop_rec
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.0
      syncScreenRefresh = False
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  Routine Aknowledgment
    RoutineSettingsComponent Aknowledgment
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you very much for participating!

        Press SPACE to end the experiment.
    KeyboardComponent exit_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine Instructions
  Routine Recording
  Routine Aknowledgment
