PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = f'data/%s_%s/%s_%s' % (expInfo['Nombre'], expInfo['date'], expInfo['Nombre'], expInfo['date'])
  Experiment info = {'Nombre': '', 'Edad': '', 'Lateralidad': "['Izquierda', 'Derecha']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  colPriority = {'': ''}
  color = -1.0000, -1.0000, -1.0000
  expName = typical-day
  keyboardBackend = ioHub
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Routines
  Routine pulses_trial_instructions
    RoutineSettingsComponent pulses_trial_instructions
      saveStartStop = False
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    TextComponent pulses_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A continuacion se mandaran 5 pulsos al equipo, acompañados de un sonido espaciados con 2 segundos.

        Pulse ESPACIO y espere 2 segundos.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pulses
    RoutineSettingsComponent pulses
      saveStartStop = False
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    SoundComponent sound_1
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        recorder._send_pulse_to_arduino()
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuación, te pedimos que nos cuentes un día típico. Espera a que aparezca el microfono para empezar a hablar.

        Pulse ESPACIO para empezar a grabar y ESPACIO nuevamente cuando termines.
    KeyboardComponent start_rec_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine recording
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    ImageComponent mic
      image = resources/microphone-png-16.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import pandas as pd
        from audioRecorder import AudioRecorder
        import serial.tools.list_ports

        def list_serial_ports():
            ports = serial.tools.list_ports.comports()
            arduino_ports = []

            for port in ports:
                # You can add more checks here based on the specific attributes of your Arduino
                if 'Arduino' in port.description or 'CH340' in port.description:
                    arduino_ports.append(port.device)

            return arduino_ports[0]
      Begin Experiment:
        output_filename = f'data/%s_%s/%s_%s.wav' % (expInfo['Nombre'],
            expInfo['date'], expInfo['Nombre'], expInfo['date'])  # Output file name

        # Configure connection to the board
        port = list_serial_ports()
        baud_rate = 115200

        # Recording Flag and Fs
        recording = False
        sample_rate = 48000

        # Instance AudioRecorder
        recorder = AudioRecorder(filepath=output_filename, mic_id=0,
            sample_rate=sample_rate, channels=1, arduino_port=port, baud_rate=baud_rate)
      Begin Routine:
        # Start Recording
        recorder.start_recording()
      End Experiment:
        # Closes serial connection
        recorder._serial.close()

        try:
            # Stop recording if it didn't stop before
            recorder.stop_recording()
        except:
            pass

        tempFileName = thisExp.dataFileName + '_TEMP.csv'
        thisExp.saveAsWideText(tempFileName)
        df = pd.read_csv(tempFileName, delimiter=',')

        df = df.fillna(method='bfill')
        df = df.fillna(method='ffill')

        # Select the first row
        first_row_df = df[[True, False, False]]

        first_row_df = first_row_df.dropna(axis=1, how='all')
        first_row_df.to_csv(thisExp.dataFileName + '_spanish.csv', sep=';', decimal=',', index=False)

        os.remove(tempFileName)
      End Routine:
        # Stop recording
        recorder.stop_recording()
    KeyboardComponent stop_rec_keypress
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.0
      syncScreenRefresh = False
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  Routine aknowledgment
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    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Presion ESPACIO para terminar el experimento
    KeyboardComponent exit_exp_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine blank_2
    RoutineSettingsComponent blank_2
      saveStartStop = False
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    TextComponent blank
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine pulses_response
    RoutineSettingsComponent pulses_response
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si vio los 5 pulsos en la señal, presione ESPACIO para continuar.

        Si no, presione ESC y DESCONECTE el dispositivo serial.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine pulses_trial_instructions
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine blank_2
    Routine pulses
  LoopTerminator trials
  Routine pulses_response
  Routine instructions
  Routine recording
  Routine aknowledgment
